PsychoPy2experiment version="2020.1.3"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {u'session': u'', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [1280, 1024]
  color = black
  expName = APRT
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Routines
  Routine trial
    CodeComponent trialsDelay
      Code Type = Auto->JS
      Begin Experiment:
        # Set delay between key presses
        #if odd
        if int(expInfo['participant'])%2==1:
            timeWait=0
        #if even
        if int(expInfo['participant'])%2==0:
            timeWait=1.5


        # Initialize response object
        theseKeys = []
      Each Frame:
        # Impose delay
        if "p" in theseKeys:
            #print "P key pressed"
            core.wait(timeWait)
    KeyboardComponent keyChoices
      allowedKeys [set every repeat] = 'p','q'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
      syncScreenRefresh = False
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    PolygonComponent solid4
      fillColor [set every frame] = $solidColor
      pos = [0, 0.6]
      shape = rectangle
      size = [1.3, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent stripe3
      fillColor [set every frame] = $stripeColor
      pos = [0, 0.4]
      shape = rectangle
      size = [1.3, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent solid3
      fillColor [set every frame] = $solidColor
      pos = [0, 0.2]
      shape = rectangle
      size = [1.3, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent stripe2
      fillColor [set every frame] = $stripeColor
      shape = rectangle
      size = [1.3, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent solid2
      fillColor [set every frame] = $solidColor
      pos = [0, -0.2]
      shape = rectangle
      size = [1.3, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent stripe1
      fillColor [set every frame] = $stripeColor
      pos = [0, -0.4]
      shape = rectangle
      size = [1.3, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent solid1
      fillColor [set every frame] = $solidColor
      pos = [0, -0.6]
      shape = rectangle
      size = [1.3, 0.2]
      startVal [time (s)] = 0.0
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    ImageComponent pictures
      image [set every frame] = $picfile
      size = [1.2, 1.3]
      startVal [time (s)] = 0.0
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    TextComponent fixationShadow
      color = black
      letterHeight = 0.1
      pos = [0, 0.006]
      startVal [time (s)] = 0.0
      text [set every frame] = +
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    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every frame] = +
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    TextComponent healthDisplayShadow
      color = black
      letterHeight = 0.12
      pos = [0.2, 0.343]
      startVal [time (s)] = 0.0
      text = Health
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    TextComponent healthDisplay
      letterHeight = 0.12
      pos = [0.2, 0.35]
      startVal [time (s)] = 0.0
      text = Health
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    TextComponent healthUpdateDisplayShadow
      color = black
      letterHeight = 0.12
      pos = [0.2, 0.193]
      startVal [time (s)] = 0.0
      text [set every frame] = $health
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    TextComponent healthUpdateDisplay
      letterHeight = 0.12
      pos = [0.2, 0.2]
      startVal [time (s)] = 0.0
      text [set every frame] = $health
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    TextComponent pointDisplayShadow
      color = black
      letterHeight = 0.12
      pos = [-0.2, 0.343]
      startVal [time (s)] = 0.0
      text = Points
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    TextComponent pointDisplay
      letterHeight = 0.12
      pos = [-0.2, 0.35]
      startVal [time (s)] = 0.0
      text = Points
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    TextComponent pointUpdateDisplayShadow
      color = black
      letterHeight = 0.12
      pos = [-0.2, 0.193]
      startVal [time (s)] = 0.0
      text [set every frame] = $pts
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    TextComponent pointUpdateDisplay
      letterHeight = 0.12
      pos = [-0.2, 0.2]
      startVal [time (s)] = 0.0
      text [set every frame] = $pts
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    TextComponent keyPressInstructions
      letterHeight = 0.075
      pos = [0, -0.8]
      startVal [time (s)] = 0.0
      wrapWidth = 2.0
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      text:
        Press the "p" key to continue with the activity.
        Press the "q" key to quit.
    TextComponent activityInstructions
      letterHeight = 0.075
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      text [set every frame] = $statusDisplay
      wrapWidth = 2.0
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    CodeComponent trials
      Code Type = Auto->JS
      Begin Experiment:
        #set experiment-wide levels of reward
        lowPointMin=5
        lowPointMax=25
        highPointMin=50
        highPointMax=250

        #set experiment-wide levels of injury
        lowInjuryMin = 5
        lowInjuryMax = 35
        highInjuryMin = 60
        highInjuryMax = 90

        #set experiment-wide maximum health
        maxHealth=100


        #Initialize trial-level variables
        trialCounter=0 #first picture trial=1
        trialInjuriesCounter=0 #reset per trial
        trialRewardsCounter=0 #reset per trial
        pPressCounter=0 #reset per trial
        deathsCounter=0
        pSinceInjuryCounter=0 #reset per injury (not trial-this can accumulate across trials!)
        pSinceRewardCounter=0 #reset per reward (not trial- this can accumulate across trials!)
        totalPoints=0
      Begin Routine:
        #Reset variables
        health=maxHealth
        pts=0
        pPressCounter=0
        trialInjuriesCounter=0
        trialRewardsCounter=0
        trialCounter=trialCounter+1

        #Initialize display variables
        statusDisplay=(description)

        #Flush all key responses made during delay
        event.clearEvents()

        #set background colors
        #solid colors (risk level)
        if (injuryProbability)==5:
            solidColor='yellow'
        if (injuryProbability)==15:
            solidColor='blue'
        #stripe colors (reward level)
        if (rewardProbability)==10:
            stripeColor='white'
        if (rewardProbability)==3:
            stripeColor=solidColor
      Each Frame:
        # if proceed
        if "p" in theseKeys:
            injuryChooser=randint(1,(injuryProbability))
            rewardChooser=randint(1,(rewardProbability))

            pPressCounter=pPressCounter+1

            #injury
            if injuryChooser==1:
                pSinceInjuryCounter=0
                trialInjuriesCounter=trialInjuriesCounter+1


                #Set amount of injury
                if (danger)==4:
                    healthPenalty= maxHealth
                if (danger)==3:
                    healthPenalty= randint(highInjuryMin, highInjuryMax)
                if (danger)==1:
                    healthPenalty= randint(lowInjuryMin, lowInjuryMax)

                #Update Display
                health=health-healthPenalty
                pts=int(round(pts*((1-(healthPenalty/maxHealth)/2)))) # Points multiplied by a fraction of the health penalty to reduce points
                statusDisplay="OH NO! You have been injured! Choose again."

                #cap points at 0
                if pts<=0:
                    pts=0

                #Terminate trial if death
                if health<=0:
                    # Set trial to end
                    loopTrial.finished=True
                    continueRoutine=False
                    showDeath=1
                    # Set points and health to 0; increment death counter
                    pts=0
                    health=0
                    deathsCounter=deathsCounter+1

            #no injury
            if injuryChooser>1:
                pSinceInjuryCounter=pSinceInjuryCounter+1

                #reward
                if rewardChooser>1:

                    trialRewardsCounter=trialRewardsCounter+1
                    pSinceRewardCounter=pSinceRewardCounter+1

                    if (points)==1:
                        pts=pts+randint(lowPointMin,lowPointMax)
                        statusDisplay="Lucky you - points awarded!"
                    if (points)==3:
                        pts=pts+randint(highPointMin,highPointMax)
                        statusDisplay="Lucky you - points awarded!"

                #no reward
                if rewardChooser==1:
                    pts=pts
                    statusDisplay="Sorry - no points awarded."
                    pSinceRewardCounter=0

            #Finish off key press
            loopTrial.finished=True

        #if quit
        if "q" in theseKeys:
            loopTrial.finished=True
            continueRoutine=False
            showDeath=0
            trialsSinceInjuryCounter=trialsSinceInjuryCounter+1
            totalPoints=totalPoints+pts
      End Routine:
        #make sure that points update before the next trial starts
    CodeComponent writeFile
      Code Type = Auto->JS
      Begin Experiment:
        # Initialize file names and writing: CHANGE TO MATCH DIRECTORY IN DATA FILENAME!
        filedir = "../data/"
        filename = '%s%s_subject-%s_session-%s_date-%s.txt' %(filedir,expName, expInfo['participant'], expInfo['session'], expInfo['date'])
        file = open(filename, "a")
        filenameTrials = '%s%s-trials_subject-%s_session-%s_date-%s.txt' %(filedir,expName, expInfo['participant'], expInfo['session'], expInfo['date'])
        fileTrials = open(filenameTrials, "a")
      Begin Routine:
        #file.write(expInfo['date'] + "\t" + expInfo['participant'] + "\t" + expInfo['session'] + "\t" + str(trialCounter) + "\t" + str(PicTypeNum) + "\t" + str(danger) + "\t" + str(points) + "\t" + str(injuryProbability) + "\t" + str(rewardProbability) + "\t" + str(health) + "\t" + str(pts) + "\t" + str(trialInjuriesCounter) + "\t" + str(trialRewardsCounter) + "\t" + str(pPressCounter) + "\t" + str(pSinceRewardCounter) + "\t" + str(deathsCounter) + "\t" + str(pSinceInjuryCounter) + "\t" + str(totalPoints) + "\t" + str(theseKeys) + "\n")

        #Reset counts
        withinTrialPointCounter=0
        trialsSinceInjuryCounter=0
        trialInjuriesCounter=0
      Each Frame:
        if "p" in theseKeys:
            file.write(expInfo['date'] + "\t" + expInfo['participant'] + "\t" + expInfo['session'] + "\t" + str(trialCounter) + "\t" + str(PicTypeNum) + "\t" + str(danger) + "\t" + str(points) + "\t" + str(injuryProbability) + "\t" + str(rewardProbability) + "\t" + str(health) + "\t" + str(pts) + "\t" + str(trialInjuriesCounter) + "\t" + str(trialRewardsCounter) + "\t" + str(pPressCounter) + "\t" + str(pSinceRewardCounter) + "\t" + str(deathsCounter) + "\t" + str(pSinceInjuryCounter) + "\t" + str(totalPoints) + "\t" + str(theseKeys) + "\n")

        if "q" in theseKeys:
            file.write(expInfo['date'] + "\t" + expInfo['participant'] + "\t" + expInfo['session'] + "\t" + str(trialCounter) + "\t" + str(PicTypeNum) + "\t" + str(danger) + "\t" + str(points) + "\t" + str(injuryProbability) + "\t" + str(rewardProbability) + "\t" + str(health) + "\t" + str(pts) + "\t" + str(trialInjuriesCounter) + "\t" + str(trialRewardsCounter) + "\t" + str(pPressCounter) + "\t" + str(pSinceRewardCounter) + "\t" + str(deathsCounter) + "\t" + str(pSinceInjuryCounter) + "\t" + str(totalPoints) + "\t" + str(theseKeys) + "\n")
      End Experiment:
        file.close()
      End Routine:
        fileTrials.write(expInfo['date'] + "\t" + expInfo['participant'] + "\t" + expInfo['session'] + "\t" + str(trialCounter) + "\t" + str(PicTypeNum) + "\t" + str(danger) + "\t" + str(points) + "\t" + str(injuryProbability) + "\t" + str(rewardProbability) + "\t" + str(health) + "\t" + str(pts) + "\t" + str(trialInjuriesCounter) + "\t" + str(trialRewardsCounter) + "\t" + str(pPressCounter) + "\t" + str(pSinceRewardCounter) + "\t" + str(deathsCounter) + "\t" + str(pSinceInjuryCounter) + "\t" + str(totalPoints) + "\t" + str(theseKeys) + "\n")
  Routine endExperiment
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent endDisplay
      letterHeight = 0.1
      pos = [0, 0.3]
      startVal [time (s)] = 0.0
      text [set every frame] = $endText
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    TextComponent text
      letterHeight = 0.1
      pos = [0, -0.4]
      startVal [time (s)] = 0.0
      text = Press the spacebar to end the experiment.
      wrapWidth = 2.0
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    CodeComponent endCode
      Code Type = Auto->JS
      Begin Routine:
        endText="""You have finished this experiment.\n Your final score is %s"""%totalPoints
  Routine deathScreen
    TextComponent deathDisplay
      color = red
      letterHeight = 0.1
      startVal [condition] = health<=0
      stopVal [duration (s)] = 3.0
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      text:
        You have died.

        You have lost all of your points for this trial.

        Please wait for a few seconds while the computer resets for the next trial.
  Routine deathScreenPractice
    TextComponent deathDisplayPractice
      color = red
      letterHeight = 0.1
      startVal [time (s)] = health<=0
      stopVal [duration (s)] = 3.0
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      text:
        You have died.

        You have lost all of your points for this trial.

        Please wait for a few seconds while the computer resets for the next trial.
  Routine beginTrials
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent startTrials
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Now that you have finished the practice trials, you are ready to begin the task.

        Press the space bar to begin.
  Routine trialPractice
    KeyboardComponent practiceResp
      allowedKeys = 'p','q'
      correctAns = 'p'
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent delayPractice
      Code Type = Auto->JS
      Begin Routine:
        # Flush all key responses made during delay
        event.clearEvents()
      Each Frame:
        if "p" in theseKeys:
            core.wait(timeWait)
    PolygonComponent solid4p
      fillColor [set every frame] = $solidColor
      pos = [0, 0.6]
      shape = rectangle
      size = [1.3, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent stripe3p
      fillColor [set every frame] = $stripeColor
      pos = [0, 0.4]
      shape = rectangle
      size = [1.3, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent solid3p
      fillColor [set every frame] = $solidColor
      pos = [0, 0.2]
      shape = rectangle
      size = [1.3, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent stripe2p
      fillColor [set every frame] = $stripeColor
      shape = rectangle
      size = [1.3, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent solid2p
      fillColor [set every frame] = $solidColor
      pos = [0, -0.2]
      shape = rectangle
      size = [1.3, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent stripe1p
      fillColor [set every frame] = $stripeColor
      pos = [0, -0.4]
      shape = rectangle
      size = [1.3, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent solid1p
      fillColor [set every frame] = $solidColor
      pos = [0, -0.6]
      shape = rectangle
      size = [1.3, 0.2]
      startVal [time (s)] = 0.0
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    ImageComponent picturesPractice
      image [set every repeat] = $picfile
      size = [1.2, 1.3]
      startVal [time (s)] = 0.0
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    TextComponent fixationShadowPractice
      color = black
      letterHeight = 0.1
      pos = [0, 0.006]
      startVal [time (s)] = 0.0
      text [set every frame] = +
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    TextComponent fixationPractice
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every frame] = +
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    TextComponent healthDisplayShadowPractice
      color = black
      letterHeight = 0.12
      pos = [0.2, 0.343]
      startVal [time (s)] = 0.0
      text = Health
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    TextComponent healthDisplayPractice
      letterHeight = 0.12
      pos = [0.2, 0.35]
      startVal [time (s)] = 0.0
      text = Health
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    TextComponent pointsDisplayShadowPractice
      color = black
      letterHeight = 0.12
      pos = [-0.2, 0.343]
      startVal [time (s)] = 0.0
      text = Points
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    TextComponent pointsDisplayPractice
      letterHeight = 0.12
      pos = [-0.2, 0.35]
      startVal [time (s)] = 0.0
      text = Points
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    TextComponent keyPressInstructionsPractice
      letterHeight = 0.075
      pos = [0, -0.8]
      startVal [time (s)] = 0.0
      wrapWidth = 2.0
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      text:
        Press the "p" key to continue with the activity.
        Press the "q" key to quit.
    TextComponent activityInstructionsPractice
      letterHeight = 0.075
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      text [set every frame] = $statusDisplay
      wrapWidth = 2.0
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    TextComponent pointUpdateDisplayShadowPractice
      color = black
      letterHeight = 0.12
      pos = [-0.2, 0.193]
      startVal [time (s)] = 0.0
      text [set every frame] = $pts
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    TextComponent healthUpdateDisplayShadowPractice
      color = black
      letterHeight = 0.12
      pos = [0.2, 0.193]
      startVal [time (s)] = 0.0
      text [set every frame] = $health
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    TextComponent pointUpdateDisplayPractice
      letterHeight = 0.12
      pos = [-0.2, 0.2]
      startVal [time (s)] = 0.0
      text [set every frame] = $pts
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    TextComponent healthUpdateDisplayPractice
      letterHeight = 0.12
      pos = [0.2, 0.2]
      startVal [time (s)] = 0.0
      text [set every frame] = $health
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    CodeComponent trialsPractice
      Code Type = Auto->JS
      Begin Experiment:
        # Initialize variables
        health=100
        pts=0
        injuryProbability=5
        rewardProbability=10

        # Initialize display variables
        hlthDisplay="""Health\n   %s""" %health
        ptsDisplay="""Points\n   %s""" %pts
        statusDisplay="DO IT!"
        showDeath=0

        # Initialize colors
        solidColor='gray'
        stripeColor='brown'
      Begin Routine:
        # Initialize variables
        health=maxHealth
        pts=0

        # Initialize display variables
        statusDisplay=description

        # Flush all key responses made during delay
        event.clearEvents()

        #set background colors
        #solid colors (risk level)
        if (injuryProbability)==5:
            solidColor='yellow'
        if (injuryProbability)==15:
            solidColor='blue'
        #stripe colors (reward level)
        if (rewardProbability)==10:
            stripeColor='white'
        if (rewardProbability)==3:
            stripeColor=solidColor
      Each Frame:
        hlthDisplay="""Health\n   %s""" %health
        ptsDisplay="""Points\n   %s""" %pts


        # if proceed
        if "p" in theseKeys:
            injuryChooser=randint(1,(injuryProbability))
            rewardChooser=randint(1,(rewardProbability))

            #yes injury
            if injuryChooser==1:
                if (danger)==4:
                    healthPenalty= maxHealth
                if (danger)==3:
                    healthPenalty= randint(highInjuryMin, highInjuryMax)
                if (danger)==1:
                    healthPenalty= randint(lowInjuryMin, lowInjuryMax)

                # Update display
                health=health-healthPenalty
                pts=int(round(pts*((1-(healthPenalty/maxHealth)/2)))) # Points multiplied by a fraction of the health penalty to reduce points
                statusDisplay="OH NO! You have been injured! Choose again."

                #cap points at 0
                if pts<=0:
                    pts=0

                #Terminate trial if death
                if health<=0:
                    loopTrialPractice.finished=True
                    continueRoutine=False
                    showDeath=1

            #no injury
            if injuryChooser>1:

                #yes reward
                if rewardChooser>1:
                    if (points)==1:
                        pts=pts+randint(lowPointMin,lowPointMax)
                    if (points)==3:
                        pts=pts+randint(highPointMin,highPointMax)
                    statusDisplay="Lucky you - points awarded!"

                #no reward
                if rewardChooser==1:
                    pts=pts
                    statusDisplay="Sorry - no points awarded."

            # Finish off key press
            loopTrialPractice.finished=True

        #if quit
        if "q" in theseKeys:
            loopTrialPractice.finished=True
            continueRoutine=False
            showDeath=0
      End Experiment:
        file.close()
      End Routine:
        # Flush all key responses made during delay
        event.clearEvents()
  Routine instructions
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent instructionDisplay
      letterHeight = 0.090
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructs
      wrapWidth = 1.75
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Flow
  LoopInitiator instructionsLoop loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'instructs': 'In this task you will be viewing pictures of different dangerous activities. You will imagine that you are participating in these activities.\n\nThe activities will include swimming with sharks, standing on the edge of a high ledge, driving a race car, and parachuting.\n\n(Press the space bar to continue.)'},
      {'instructs': 'For each picture, you will decide how long you participate in the activity. The longer you participate, the more points you will earn. Your point total will be displayed in the top left corner of the screen.\n\nHowever, the longer you participate in an activity, the more likely it is that you could be injured or killed.\n\nFor example, the longer you swim with sharks, the more points you earn but the greater your chance of being attacked.\n\n(Press the space bar to continue.)'},
      {'instructs': 'To continue participating in an activity represented by a picture, you will press the "p" key on the keyboard with your RIGHT pointer finger("p" is for "proceed"). The more times you press the "p" key, the longer you will participate in the activity.\n\nTo stop participating in a particular activity and move on to the next activity,you will press the "q" key on the keyboard with your LEFT pointer finger ("q" is for "quit").\n\nIf you press the "q" key to move on to the next activity you will keep the points you earned on that trial.\n\n(Press the space bar to continue.)'},
      {'instructs': 'If you participate in a particular activity too long, you may be injured or killed. The amount of health you have left will be displayed in the top right corner of the screen. Your health will reset after each trial.\n\nIf your health runs out, you will lose your points for that trial.\n\nThe likelihood of getting injured depends on the border color.\n\nRED borders mean a LOW likelihood of being injured.\nORANGE borders mean a MEDIUM likelihood of being injured.\nYELLOW bordes mean a HIGH likelihood of being injured.\n\n(Press the space bar to continue.)'}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
    Routine instructions
  LoopTerminator instructionsLoop
  LoopInitiator trialConditionsPractice loopType="TrialHandler"
    conditionsFile = PracticeRunorder4.2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'healthpenalty': None, 'weight': 1, 'danger': 3, 'infocolor': 'yellow', 'nested': None, 'pointtotal': None, 'picfile': 'Cliff/cliff_med_6.jpg', 'PlayStartleCondition': 1, 'description': 'You are standing on the edge of a treacherous ledge.', 'ConditionCount': 1, 'healthtotal': 100, 'injuryProbability': 5, 'pictype': 'cliff', 'ConditionCombo': 23105, 'rewardProbability': 10, 'pointsawarded': 30, 'StartleTrigger': 231, 'StartleDuration': 50, 'ConditionTrigger': 31, 'PicTypeNum': 2, 'points': 1, 'picnumber': 1, 'initialhealth': 100, 'procedure': 'repeattrials'},
      {'healthpenalty': None, 'weight': 1, 'danger': 1, 'infocolor': 'blue', 'nested': None, 'pointtotal': None, 'picfile': 'Disaster/disaster_prac_1.jpg', 'PlayStartleCondition': 1, 'description': 'You are trying to take close up photographs of natural disasters.', 'ConditionCount': 1, 'healthtotal': 100, 'injuryProbability': 15, 'pictype': 'disaster', 'ConditionCombo': 31315, 'rewardProbability': 3, 'pointsawarded': 100, 'StartleTrigger': 218, 'StartleDuration': 50, 'ConditionTrigger': 18, 'PicTypeNum': 3, 'points': 3, 'picnumber': 2, 'initialhealth': 100, 'procedure': 'repeattrials'},
      {'healthpenalty': None, 'weight': 1, 'danger': 1, 'infocolor': 'yellow', 'nested': None, 'pointtotal': None, 'picfile': 'Animal/animal_prac_1.jpg', 'PlayStartleCondition': 1, 'description': 'You are exploring and encounter a dangerous animal.', 'ConditionCount': 1, 'healthtotal': 100, 'injuryProbability': 5, 'pictype': 'animal', 'ConditionCombo': 11305, 'rewardProbability': 3, 'pointsawarded': 100, 'StartleTrigger': 204, 'StartleDuration': 50, 'ConditionTrigger': 4, 'PicTypeNum': 1, 'points': 3, 'picnumber': 24, 'initialhealth': 100, 'procedure': 'repeattrials'},
      {'healthpenalty': None, 'weight': 1, 'danger': 3, 'infocolor': 'blue', 'nested': None, 'pointtotal': None, 'picfile': 'Hero/hero_prac_1.jpg', 'PlayStartleCondition': 1, 'description': 'You are attempting to save someone from a dangerous situation.', 'ConditionCount': 1, 'healthtotal': 100, 'injuryProbability': 15, 'pictype': 'hero', 'ConditionCombo': 43115, 'rewardProbability': 10, 'pointsawarded': 30, 'StartleTrigger': 245, 'StartleDuration': 50, 'ConditionTrigger': 45, 'PicTypeNum': 4, 'points': 1, 'picnumber': 25, 'initialhealth': 100, 'procedure': 'repeattrials'}]
    LoopInitiator loopTrialPractice loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 2500
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      Routine trialPractice
      LoopInitiator deathLoopPractice loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = showDeath
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        Routine deathScreenPractice
      LoopTerminator deathLoopPractice
    LoopTerminator loopTrialPractice
  LoopTerminator trialConditionsPractice
  Routine beginTrials
  LoopInitiator trialConditions loopType="TrialHandler"
    conditionsFile = Runorder4.2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      "[{u'healthpenalty': None, u'danger': 1L, u'infocolor': 'red', u'pointtotal': None, u'picfile': u'Animal/animal_low_4.jpg', u'PlayStartleCondition': 1L, u'description': 'You are exploring and encounter a dangerous animal.', u'ConditionCount': 1L, u'healthtotal': 100L, u'injuryProbability': 15L, u'sortMePic': 1L, u'pictype': u'animal', u'ConditionCombo': 11111L, u'rewardProbability': 10L, u'StartleTrigger': 202L, u'StartleDuration': 50L, u'ConditionTrigger': 2L, u'newPicNum': 48L, u'PicTypeNum': 1L, u'points': 1L, u'picnumber': 89L, u'initialhealth': 100L},
      {u'healthpenalty': None, u'danger': 3L, u'infocolor': 'yellow', u'pointtotal': None, u'picfile': u'Cliff/cliff_hi_7.jpg', u'PlayStartleCondition': 1L, u'description': 'You are standing on the edge of a treacherous ledge.', u'ConditionCount': 1L, u'healthtotal': 100L, u'injuryProbability': 5L, u'sortMePic': 2L, u'pictype': u'cliff', u'ConditionCombo': 23300L, u'rewardProbability': 3L, u'StartleTrigger': 233L, u'StartleDuration': 50L, u'ConditionTrigger': 33L, u'newPicNum': 53L, u'PicTypeNum': 2L, u'points': 3L, u'picnumber': 17L, u'initialhealth': 100L},
      {u'healthpenalty': None, u'danger': 1L, u'infocolor': 'red', u'pointtotal': None, u'picfile': u'Disaster/disaster_low_4.jpg', u'PlayStartleCondition': 1L, u'description': 'You are trying to take close up photographs of natural disasters.', u'ConditionCount': 1L, u'healthtotal': 100L, u'injuryProbability': 15L, u'sortMePic': 3L, u'pictype': u'disaster', u'ConditionCombo': 31110L, u'rewardProbability': 3L, u'StartleTrigger': 214L, u'StartleDuration': 50L, u'ConditionTrigger': 14L, u'newPicNum': 23L, u'PicTypeNum': 3L, u'points': 1L, u'picnumber': 28L, u'initialhealth': 100L},
      {u'healthpenalty': None, u'danger': 3L, u'infocolor': 'yellow', u'pointtotal': None, u'picfile': u'Hero/hero_high_7.jpg', u'PlayStartleCondition': 1L, u'description': 'You are attempting to save someone from a dangerous situation.', u'ConditionCount': 1L, u'healthtotal': 100L, u'injuryProbability': 5L, u'sortMePic': 4L, u'pictype': u'hero', u'ConditionCombo': 43300L, u'rewardProbability': 3L, u'StartleTrigger': 245L, u'StartleDuration': 50L, u'ConditionTrigger': 45L, u'newPicNum': 10L, u'PicTypeNum': 4L, u'points': 3L, u'picnumber': 74L, u'initialhealth': 100L}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
    LoopInitiator loopTrial loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 2500
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      Routine trial
      LoopInitiator deathLoop loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = showDeath
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        Routine deathScreen
      LoopTerminator deathLoop
    LoopTerminator loopTrial
  LoopTerminator trialConditions
  Routine endExperiment
